PsychoPy2experiment version="1.74.00"
Settings
  Save csv file = True
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Save log file = False
  Save wide csv file = False
  expName = stroop_peer
  logging level = warning
  Units = norm
  Show info dlg = False
  Saved data folder = /home/mati/temp
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    CodeComponent code
      Begin Experiment:
        SUPER_BLOCKS = ['CON', 'EXP']
        BLOCKS_COUNT = 2
        TRIALS_COUNT = 12
        KEYS_MAP = {'green':'7', 'red':'8', 'yellow':'9', 'blue':'0'}
        CONDITIONS_FILE='/home/mati/obci/exps/dorota2/alTypesCongruent.csv'


        condition = 'EXP'
        block_index = 0
        trial_index = 0
      End Routine:
        #ts = ts +word.tStart
        #H.send_tag(ts, time.time(), "word",
        #    {'keys':str(resp.keys),
        #    'corr':str(resp.corr),
        #    'rt':str(resp.rt),
        #    'text':str(text),
        #   'color':str(letterColor),
        #   'condition':str(condition),
        #   'block_index':str(block_index),
        #   'trial_index':str(trial_index),
        #    })
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "7", "8", "9", "0"
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /home/mati/obci/exps/dorota2/trialTypesCongruent.csv
    loopType = sequential
    nReps = BLOCKS_COUNT
    endPoints = [1, 2]
    conditions:
      [{'text': u'red', 'congruent': 1, 'corrAns': 7, 'letterColor': u'red'},
      {'text': u'green', 'congruent': 1, 'corrAns': 8, 'letterColor': u'green'},
      {'text': u'blue', 'congruent': 1, 'corrAns': 9, 'letterColor': u'blue'},
      {'text': u'yellow', 'congruent': 1, 'corrAns': 0, 'letterColor': u'yellow'},
      {'text': u'red', 'congruent': 1, 'corrAns': 7, 'letterColor': u'red'},
      {'text': u'green', 'congruent': 1, 'corrAns': 8, 'letterColor': u'green'},
      {'text': u'blue', 'congruent': 1, 'corrAns': 9, 'letterColor': u'blue'},
      {'text': u'yellow', 'congruent': 1, 'corrAns': 0, 'letterColor': u'yellow'},
      {'text': u'red', 'congruent': 1, 'corrAns': 7, 'letterColor': u'red'},
      {'text': u'green', 'congruent': 1, 'corrAns': 8, 'letterColor': u'green'},
      {'text': u'blue', 'congruent': 1, 'corrAns': 9, 'letterColor': u'blue'},
      {'text': u'yellow', 'congruent': 1, 'corrAns': 0, 'letterColor': u'yellow'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
